CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:tif,tiff,flex,zvi movies
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):HeLa
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    Extract metadata from where?:None
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    Channel count:3
    Group the movie frames?:No
    Grouping method:Interleaved
    Number of channels per group:3
    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Channel number:1
    Rescale intensities?:Yes
    Load the input as images or objects?:Images
    Name this loaded image:Actin
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    Channel number:2
    Rescale intensities?:Yes
    Load the input as images or objects?:Images
    Name this loaded image:Protein
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    Channel number:3
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,150
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.005
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
IdentifySecondaryObjects:[module_num:3|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:Protein
    Name the primary objects to be identified:Vesicles
    Typical diameter of objects, in pixel units (Min,Max):3,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.0025
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
RelateObjects:[module_num:5|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
    Parent objects:Nuclei
    Child objects:Vesicles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:6|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
    Hidden:1
    Select an image to measure:Protein
    Select objects to measure:Vesicles

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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